{
    "cfgformat": "20180910",
    "actions": {
        "WAD_MR_geomZ": {
            "filters": {},
            "params": {
                "match": "ACR SAG LOC"
            }
        },
        "logverbose": {
            "filters": {},
            "params": {
                "logLevel": "1",
                "copyOutputDir": "",
                "logMode": "3"
            }
        },
        "WAD_MR_SNR_MultiChannel": {
            "filters": {},
            "params": {
                "match": "ACR SNR 8CH",
                "image": "63",
                "uncombinedImages": "55; 56; 57; 58; 59; 60; 61; 62",
                "uncombinedCoils": "1; 2; 3; 4; 5; 6; 7; 8",
                "ROIradius": "75",
                "combinedImage": "63",
                "backgroundROIsize": "7",
                "backgroundROIshift": "112"
            }
        },
        "acqdatetime": {
            "filters": {},
            "params": {}
        },
        "WAD_MR_TxAmplFreq": {
            "filters": {},
            "params": {
                "match": "ACR TRA T1",
                "autoComment2": "ac.description='Scanner Software Version'; ac.field='SoftwareVersion'; ac.level=2;",
                "TxAmplField": "Private_0019_1094",
                "autoComment1": "ac.description='QC Study Comment'; ac.field='AdditionalPatientHistory'; ac.level=1;",
                "autoComment4": "ac.description=''; ac.field=''; ac.level=2;",
                "TxFreq_f0_MHz": "127.0",
                "autoComment3": "ac.description=''; ac.field=''; ac.level=2;",
                "autoComment5": "ac.description=''; ac.field=''; ac.level=2;",
                "TxFreqField": "ImagingFrequency",
                "resultsNamePrefix": "",
                "TxAmplType": "int16"
            }
        },
        "WAD_MR_geomXY": {
            "filters": {},
            "params": {
                "match": "ACR TRA T1",
                "image": "7"
            }
        },
        "WAD_MR_SNR": {
            "filters": {},
            "params": {
                "match": "ACR SNR 8CH",
                "image": "63",
                "ROIradius": "75",
                "backgroundROIsize": "7",
                "backgroundROIshift": "112"
            }
        },
        "WAD_MR_B0_uniformity": {
            "filters": {},
            "params": {
                "match": "B0_map",
                "imagePhase": "18",
                "type": "GE_VUMC_custom",
                "imageMagnitude": "7"
            }
        }
    },
    "info": {
        "WAD_MR_geomZ": {
            "params": {}
        },
        "logverbose": {
            "params": {}
        },
        "WAD_MR_SNR_MultiChannel": {
            "params": {}
        },
        "WAD_MR_B0_uniformity": {
            "params": {}
        },
        "WAD_MR_geomXY": {
            "params": {}
        },
        "WAD_MR_SNR": {
            "params": {}
        },
        "WAD_MR_TxAmplFreq": {
            "params": {}
        }
    },
    "comments": {
        "description": "WAD MR configuration for GE scanners",
        "creator": "Scite",
        "version": "2.0 - 20170724 MSMC",
        "author": "Joost Kuijer, VUmc"
    }
}